#  Example qudi-core configuration file.
#

global:
  startup_modules: []

hardware:
  celesta:
    module.Class: 'laser.lumencor_celesta.LumencorCelesta'
    options:
      ip: '192.168.201.200'
      wavelengths:
        - "405 nm"
        - "446 nm"
        - "477 nm"
        - "520 nm"
        - "546 nm"
        - "638 nm"
        - "750 nm"

  ms2000:
    module.Class: 'multi_axis_translation_stage.MS2000_ASI.MS2000'
    options:
      com_port: '/dev/serial/by-id/usb-Silicon_Labs_CP2101_USB_to_UART_Bridge_Controller_0001-if00-port0'
      baud_rate: '9600'  # '115200'
      first_axis_property:
        label: 'x'
        max_velocity: 7500.0  # µm/s
      second_axis_property:
        label: 'y'
        max_velocity: 7500.0  # µm/s
      LED connected: false

  hamilton_valve:
    module.Class: 'fluidics_valve.hamilton_valve.HamiltonValve'
    options:
      com_port: '/dev/serial/by-id/usb-Prolific_Technology_Inc._USB-Serial_Controller_D-if00-port0'
      num_valves: 2
      daisychain_ID:
          - 'a'
          - 'b'
      name:
          - 'Buffer 8-way valve'
          - 'RT rinsing 2-way valve'
      number_outputs:
          - 8
          - 2
      valve_positions:
          - - '1'
            - '2'
            - '3'
            - '4'
            - '5'
            - '6'
            - '7'
            - '8'
          - - '1: Inject probe'
            - '2: Rinse needle'

  fluigent_sdk:
    module.Class: 'fluidics.fluigent_sdk.FluigentSDK'

  fluigent_flow_sensor:
    module.Class: 'interfuse_hardware.fluigent_flow_sensor.FluigentFlowSensor'
    connect:
      sdk: 'fluigent_sdk'
    options:
      sensor_channel_IDs:
        - 0

  pi_multi_axis_stage:
      module.Class: 'multi_axis_translation_stage.PI_multi_axis_stage.PIMultiAxisStage'
      options:
          connection_mode: 'individual_linux'
          axes:
            r:
              controller_name: 'C-863'
              serialnumber: '/dev/serial/by-id/usb-PI_PI_C-863_Mercury-if00-port0'
              type: 'linear'
              reference_mode: 'FNL'
              velocity_max: 20000.0  # µm/s

            phi:
              controller_name: 'C-867'
              serialnumber: '/dev/serial/by-id/usb-PI_PI_C-867_Piezomotor_Controller_14ASKLJ_-if00-port0'
              type: 'rotation'
              reference_mode: 'FRF'
              velocity_max: 20000.0  # µm/s

            z:
              controller_name: 'C-863'
              serialnumber: '/dev/serial/by-id/usb-PI_PI_C-863_Mercury_16HU24A_-if00-port0'
              type: 'linear'
              reference_mode: 'FNL'
              velocity_max: 20000.0  # µm/s

  pipetting_robot:
    module.Class: 'interfuse_hardware.pipetting_robot.PipettingRobot'
    connect:
      motor: 'pi_multi_axis_stage'
    options:
      exp_setup: 'spinning_disk'
      grid: 'polar'  # 'cartesian'
      r_positions: 3
      phi_positions: 36
      delta_x: 0.0  # in µm
      delta_y: 0.0  # in µm
      delta_r: -20000.0  # in µm
      delta_phi: -10.0  # in degree

      first_axis: 'r'
      second_axis: 'phi'
      z_axis: 'z'

      z_safety_position: 15000.0  # in µm
      parking_position:
        r: 0.0
        phi: 0.0
        z: 0.0
      park_on_deactivate: true

      tube_types:
        - '2mL flat tube'
        - '2mL round tube'
      pos1_axis_1_default: 44000.0  # in µm
      pos1_axis_2_default: 1.0  # in degree
      pos1_axis_3_default:
        - 65000.0
        - 65000.0

  daq:
    module.Class: 'daq.Measurement_Computing_daq.MccDAQ'
    options:
      read_write_timeout: 10
      ao_channels:
         fluidics_pump:
           - 0  # physical channel on the daq
           - UNI10VOLTS # voltage range defined by the spec of the connected device. Here [-10, 10] V.
         rinsing_pump:
           - 1
           - UNI10VOLTS
        # laser_405:
        #   - '/Dev1/AO0'
        #   - [0, 10]
      ai_channels:
#          example
#            - 0  # physical channel on the daq
#            - UNI10VOLTS # voltage range defined by the spec of the connected device. Here [-10, 10] V.
#            - SINGLE_ENDED  # DIFFERENTIAL
      do_channels:
      di_channels:

  fluidics_pump:
    module.Class: 'interfuse_hardware.daq_pump_controller.DaqPumpController'
    connect:
      daq: 'daq'
    options:
      kind: "voltage"
      unit: "V"
      minimum: 0.0
      maximum: 3.0
      output_task: 'fluidics'

  rinsing_pump:
    module.Class: 'interfuse_hardware.daq_pump_controller.DaqPumpController'
    connect:
      daq: 'daq'
    options:
      kind: "voltage"
      unit: "V"
      minimum: 0.0
      maximum: 3.0
      output_task: 'rinsing_pump'